IF.TrialList.Current.ObjectVersion.WriteVersion. STRINGEQUALTO. #"#Pinnacle v9.0".THEN
    {
    PluginManager .DICOMExportPlugin .RemoteAETitle = "IMGSTORE";
          DICOM .AETitle = "IMGSTORE";
          DICOM .TimeOutLength = " 300";
    PluginManager .DICOMExportPlugin
         {
          SendPlan = 1;
          SendDRR = 0;
          SendSetup = 0;
          AnnotateSetup = 0;
          AnnotateDRR = 0;
          SSDInArcs = 0;
          };

PluginManager .DICOMExportPlugin. SSDInArcs = 0;
     TrialList .Current .PrescriptionList .#"*" .SelectedForDICOMExport = 0;   
     TrialList .Current .PrescriptionList .#"#0" .SelectedForDICOMExport = 1;
     WindowList .DICOMExport .Create = "Export DICOM...";
     };

IF.TrialList.Current.ObjectVersion.WriteVersion. STRINGEQUALTO. #"#Pinnacle v8.0m".THEN
    {
    PluginManager .DICOMExportPlugin .RemoteAETitle = "IMGSTORE";
        DICOM  .AETitle = "IMGSTORE";
        ExportOption .Index = 6;
        WindowList .Export .Create = "Export...";
        DICOM .TimeOutLength = " 300";

    PluginManager .DICOMExportPlugin
       {
       SendPOI = 0;
       SendROI = 0;
       SendPlan = 1;
       SendDRR = 0;
       SendSetup = 0;
       AnnotateSetup = 0;
       AnnotateDRR = 0;
       };
    };

